acquisition:
  metadata:
    subject_id: 123456
    experimenter_name: adam glaser
    immersion_medium: 0.05X SSC
    immersion_medium_refractive_index: 1.33
    x_anatomical_direction: Anterior_to_posterior
    y_anatomical_direction: Inferior_to_superior
    z_anatomical_direction: Left_to_right
  operations:
    vp-151mx:
      zarr_v3:
        type: writer
        driver: voxel.writers.zarr_v3
        module: Writer
        init:
          path: ./local_test
        settings:
          compression: lz4
          compression_level: 1
          shuffle: shuffle
          downsampling_method: cpu
          data_type: uint16
      rsync:
        type: transfer
        driver: voxel.processes.file_transfer.rsync
        module: FileTransfer
        init:
          external_directory: ./external_test
      max_projection:
        type: process
        driver: voxel.processes.cpu.max_projection
        module: MaxProjection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          projection_count_px: 32
      background_collection:
        type: routine
        driver: voxel.routines.background_collection
        module: BackgroundCollection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          frame_count_px: 10
  tiles:
    - tile_number:
        x: 0
        y: 0
        z: 0
        w: 0
      position_mm:
        x: 0
        y: 0
        z: 0
        w: 0
      voxel_size_um:
        x: 0.748
        y: 0.748
        z: 1.000
      prefix: tile
      frame_count_px: 64
      binning: 1
      channel: "488"
      power_mw: 1000
    # - tile_number:
    #     x: 1
    #     y: 0
    #     z: 0
    #     w: 0
    #   position_mm:
    #     x: 0
    #     y: 0
    #     z: 0
    #     w: 0
    #   voxel_size_um:
    #     x: 0.748
    #     y: 0.748
    #     z: 1.000
    #   prefix: tile
    #   frame_count_px: 64
    #   binning: 1
    #   channel: "488"
    #   power_mw: 1000