instrument:
  id: exaspim-01
  channels:
    "405":
      lasers:
        -405nm
      filters:
        -BP405
    "488":
      lasers:
        -488nm
      filters:
        - BP488
    "561":
      lasers:
        -561nm
      filters:
        - BP561
    "638":
      lasers:
        - 638nm
      filters:
        -  LP638
  devices:
      vp-151mx:
        type: camera
        driver: voxel.devices.camera.simulated
        module: Camera
        init:
          id: MP151BBX006
        settings:
          exposure_time_ms: 10.0
          roi:
            width_px: 1024
            height_px: 1024
          pixel_type: mono16
          trigger:
            mode: off
            source: external
            polarity: rising
      ASI MS-8000 y axis:
        type: tiling_stage
        driver: voxel.devices.stage.simulated
        module: Stage
        init:
          hardware_axis: y
          instrument_axis: y
        settings:
          speed_mm_s: 1.0
          acceleration_ms: 100.0
          backlash_mm: 0
          mode: off
      ASI MS-8000 z axis:
        type: tiling_stage
        driver: voxel.devices.stage.simulated
        module: Stage
        init:
          hardware_axis: z
          instrument_axis: x
        settings:
          speed_mm_s: 1.0
          acceleration_ms: 100.0
          backlash_mm: 0
          mode: off
      ASI MS-8000 w axis:
        type: tiling_stage
        driver: voxel.devices.stage.simulated
        module: Stage
        init:
          hardware_axis: w
          instrument_axis: w
        settings:
          speed_mm_s: 1.0
          acceleration_ms: 100.0
          backlash_mm: 0
          mode: off
      ASI LS-100 x axis:
        type: scanning_stage
        driver: voxel.devices.stage.simulated
        module: Stage
        init:
          hardware_axis: x
          instrument_axis: z
        settings:
          speed_mm_s: 1.0
          acceleration_ms: 100.0
          backlash_mm: 0
          mode: step shoot
      ASI FW-1000:
        type: filter_wheel
        driver: voxel.devices.filterwheel.simulated
        module: FilterWheel
        init:
          id: "0"
          filters:
            BP405: 0
            BP488: 1
            BP561: 2
            LP638: 3
            MB405/488/561/638: 4
            Empty1: 5
            Empty2: 6
        subdevices:
          BP405:
            type: filter
            driver: voxel.devices.filter.simulated
            module: Filter
            init:
              id: BP405
          BP488:
            type: filter
            driver: voxel.devices.filter.simulated
            module: Filter
            init:
              id: BP488
          BP561:
            type: filter
            driver: voxel.devices.filter.simulated
            module: Filter
            init:
              id: BP561
          BP638:
            type: filter
            driver: voxel.devices.filter.simulated
            module: Filter
            init:
              id: BP638
          MB405/488/561/638:
            type: filter
            driver: voxel.devices.filter.simulated
            module: Filter
            init:
              id: MB405/488/561/638
      ASI joystick:
        type: joystick
        driver: voxel.devices.stage.simulated
        module: Joystick
        init:
          joystick_mapping:
            joystick_x:
              polarity: default
              instrument_axis: x
            joystick_y:
              polarity: default
              instrument_axis: z
            wheel_z:
              polarity: inverted
              instrument_axis: y
            wheel_f:
              polarity: default
              instrument_axis: w
      405nm:
        type: laser
        driver: voxel.devices.lasers.simulated
        module: SimulatedLaser
        init:
          port: COM1
      488nm:
        type: laser
        driver: voxel.devices.lasers.simulated
        module: SimulatedLaser
        init:
          port: COM2
      561nm:
        type: laser
        driver: voxel.devices.lasers.simulated
        module: SimulatedLaser
        init:
          port: COM3
      638nm:
        type: laser
        driver: voxel.devices.lasers.simulated
        module: SimulatedLaser
        init:
          port: COM4
      PCIe-6738:
        type: daq
        driver: voxel.devices.daq.simulated
        module: DAQ
        init:
          dev: Dev2
        tasks:
            ao_task:
                name: ao task
                timing:
                    trigger_mode: on
                    trigger_polarity: rising
                    trigger_port: PFI0
                    retriggerable: on
                    sample_mode: finite
                    period_time_ms: 500
                    rest_time_ms: 50
                    sampling_frequency_hz: 10000
                ports:
                    tunable lens:
                      port: ao0
                      device_min_volts: 0.0
                      device_max_volts: 5.0
                      waveform: sawtooth
                      parameters:
                          start_time_ms:
                            channels:
                                "488": 10.0
                                "561": 10.0
                                "639": 10.0
                          end_time_ms:
                            channels:
                                "488": 400.0
                                "561": 400.0
                                "639": 400.0
                          amplitude_volts:
                            channels:
                                "488": 1.0
                                "561": 1.0
                                "639": 1.0
                          offset_volts:
                            channels:
                                "488": 2.5
                                "561": 2.5
                                "639": 2.5
                          cutoff_frequency_hz:
                            channels:
                                "488": 200
                                "561": 200
                                "639": 200
                    stage:
                      port: ao1
                      device_min_volts: 0.0
                      device_max_volts: 5.0
                      waveform: square wave
                      parameters:
                        start_time_ms:
                            channels:
                                "488": 60.0
                                "561": 60.0
                                "639": 60.0
                        end_time_ms:
                            channels:
                                "488": 350.0
                                "561": 350.0
                                "639": 350.0
                        max_volts:
                            channels:
                                "488": 5.0
                                "561": 5.0
                                "639": 5.0
                        min_volts:
                            channels:
                                "488": 0.0
                                "561": 0.0
                                "639": 0.0
                    x galvo mirror:
                      port: ao2
                      device_min_volts: 0.0
                      device_max_volts: 5.0
                      waveform: triangle wave
                      parameters:
                          start_time_ms:
                            channels:
                                "488": 10.0
                                "561": 10.0
                                "639": 10.0
                          end_time_ms:
                            channels:
                                "488": 400.0
                                "561": 400.0
                                "639": 400.0
                          amplitude_volts:
                            channels:
                                "488": 1.0
                                "561": 1.0
                                "639": 1.0
                          offset_volts:
                            channels:
                                "488": 2.5
                                "561": 2.5
                                "639": 2.5
                          cutoff_frequency_hz:
                            channels:
                                "488": 200
                                "561": 200
                                "639": 200
            co_task:
                name: co task
                timing:
                    output_port: PFI0
                    frequency_hz: 2.0
                    trigger_mode: off
                counters: [ctr0]
            do_task:
                name: do task
                timing:
                    trigger_mode: on
                    trigger_polarity: rising
                    trigger_port: PFI0
                    retriggerable: on
                    sample_mode: finite
                    period_time_ms: 500
                    rest_time_ms: 50
                    sampling_frequency_hz: 10000
                ports:
                    laser:
                      port: port0
                      waveform: square wave
                      parameters:
                        start_time_ms:
                            channels:
                                "488": 100.0
                                "561": 100.0
                                "639": 100.0
                        end_time_ms:
                            channels:
                                "488": 200.0
                                "561": 200.0
                                "639": 200.0