instrument:
  id: exaspim-01
  devices:
    cameras:
      - name: Vieworks VP-151MX
        driver: voxel.devices.camera.vieworks_egrabber
        module: Camera
        init:
          id: MB151BAY001
        settings:
          exposure_time_ms: 200.0
          roi:
            width_px: 14192
            height_px: 10640
          image_format:
            pixel_type: mono12
            bit_packing_mode: msb
          trigger:
            mode: off
            source: external
            polarity: rising
    stages:
      tiling:
        - name: ASI MS-8000 y axis
          driver: voxel.devices.stage.asi
          module: Stage
          init:
            port: COM3
            hardware_axis: y
            instrument_axis: y
          settings:
            speed_mm_s: 1.0
            acceleration_ms: 100.0
            backlash_mm: 0
            mode: off
            joystick_polarity: default
            joystick_mapping: joystick y
        - name: ASI MS-8000 z axis
          driver: voxel.devices.stage.asi
          module: Stage
          init:
            port: COM3
            hardware_axis: z
            instrument_axis: x
          settings:
            speed_mm_s: 1.0
            acceleration_ms: 100.0
            backlash_mm: 0
            mode: off
            joystick_polarity: default
            joystick_mapping: joystick x
        - name: ASI C60-ROT theta axis
          driver: voxel.devices.stage.asi
          module: Stage
          init:
            port: COM3
            hardware_axis: t
            instrument_axis: t
          settings:
            speed_mm_s: 1.0
            acceleration_ms: 100.0
            backlash_mm: 0
            mode: off
            joystick_polarity: default
            joystick_mapping: wheel f
      scanning:
        - name: ASI LS-100 x axis
          driver: voxel.devices.stage.asi
          module: Stage
          init:
            port: COM3
            hardware_axis: x
            instrument_axis: z
          settings:
            speed_mm_s: 1.0
            acceleration_ms: 100.0
            backlash_mm: 0
            mode: step shoot
            joystick_polarity: default
            joystick_mapping: wheel z
    filter_wheels:
      - name: ASI FW-1000
        driver: voxel.devices.filterwheel.asi
        module: FilterWheel
        init:
          port: COM3
          id: 0
          filters:
            BP405: 0
            BP488: 1
            BP561: 2
            LP638: 3
            MB405/488/561/638: 4
            Empty1: 5
            Empty2: 6
    daqs:
      - name: PCIe-6738
        driver: voxel.devices.daq.ni
        module: DAQ
        init:
          dev: Dev1
        tasks:
            ao_task:
                name: ao task
                timing:
                    trigger_mode: on
                    trigger_polarity: rising
                    trigger_port: PFI0
                    retriggerable: on
                    sample_mode: finite
                    period_time_ms: 500
                    rest_time_ms: 50
                    sampling_frequency_hz: 10000
                ports:
                    - port: ao0
                      name: tunable lens
                      device_min_volts: 0.0
                      device_max_volts: 5.0
                      waveform: sawtooth
                      parameters:
                          start_time_ms:
                            type: static
                            channels:
                                "488": 10.0
                                "561": 10.0
                                "639": 10.0
                          end_time_ms:
                            type: static
                            channels:
                                "488": 400.0
                                "561": 400.0
                                "639": 400.0
                          amplitude_volts:
                            type: static
                            channels:
                                "488": 1.0
                                "561": 1.0
                                "639": 1.0
                          offset_volts:
                            type: static
                            channels:
                                "488": 2.5
                                "561": 2.5
                                "639": 2.5
                          cutoff_frequency_hz:
                            type: static
                            channels:
                                "488": 200
                                "561": 200
                                "639": 200
                    - port: ao1
                      name: stage
                      device_min_volts: 0.0
                      device_max_volts: 5.0
                      waveform: square wave
                      parameters:
                        start_time_ms:
                            type: static
                            channels:
                                "488": 60.0
                                "561": 60.0
                                "639": 60.0
                        end_time_ms:
                            type: static
                            channels:
                                "488": 350.0
                                "561": 350.0
                                "639": 350.0
                        max_volts:
                            type: static
                            channels:
                                "488": 5.0
                                "561": 5.0
                                "639": 5.0
                        min_volts:
                            type: static
                            channels:
                                "488": 0.0
                                "561": 0.0
                                "639": 0.0
                    - port: ao2
                      name: x galvo mirror
                      device_min_volts: 0.0
                      device_max_volts: 5.0
                      waveform: triangle wave
                      parameters:
                          start_time_ms:
                            type: static
                            channels:
                                "488": 10.0
                                "561": 10.0
                                "639": 10.0
                          end_time_ms:
                            type: static
                            channels:
                                "488": 400.0
                                "561": 400.0
                                "639": 400.0
                          amplitude_volts:
                            type: static
                            channels:
                                "488": 1.0
                                "561": 1.0
                                "639": 1.0
                          offset_volts:
                            type: static
                            channels:
                                "488": 2.5
                                "561": 2.5
                                "639": 2.5
                          cutoff_frequency_hz:
                            type: static
                            channels:
                                "488": 200
                                "561": 200
                                "639": 200
            co_task:
                name: co task
                timing:
                    output_port: PFI0
                    frequency_hz: 2.0
                counters:
                    - counter: ctr0
            do_task:
                name: do task
                timing:
                    trigger_mode: on
                    trigger_polarity: rising
                    trigger_port: PFI0
                    retriggerable: on
                    sample_mode: finite
                    period_time_ms: 500
                    rest_time_ms: 50
                    sampling_frequency_hz: 10000
                ports:
                    - port: PFI1
                      name: laser
                      waveform: square wave
                      parameters:
                        start_time_ms:
                            type: static
                            channels:
                                "488": 100.0
                                "561": 100.0
                                "639": 100.0
                        end_time_ms:
                            type: static
                            channels:
                                "488": 200.0
                                "561": 200.0
                                "639": 200.0