name: "Example Instrument"
description: "A simulated instrument for testing purposes"

daq:
  conn: Dev1
  tasks:
    acq_clock:
      type: clockgen
      kwds:
        out_pin: PFI0
        counter: ctr0
        freq_hz: 1000
        duty_cycle: 0.5
        initial_delay_ms: 0
    acq_task:
      type: wavegen
      kwds:
        sampling_rate_hz: 350000
        period_ms: 10
        trigger: acq_clock

devices:
  simulated_camera_1:
    driver: voxel.drivers.cameras.simulated.SimulatedCamera
    kwds:
      pixel_size_um: 3.5, 3.5
    waveform:
      task: acq_task
      pin: ao0
  objective_40x:
    driver: voxel.instrument.devices.lens.VoxelLens
    kwds:
      magnification: 40
  laser_488:
    driver: voxel.drivers.lasers.simulated.SimulatedLaser
    kwds:
      wavelength: 488
    waveform:
      task: acq_task
      pin: ao1
  laser_561:
    driver: voxel.drivers.lasers.simulated.SimulatedLaser
    kwds:
      wavelength: 561
    waveform:
      task: acq_task
      pin: ao2
  filter_488:
    driver: voxel.drivers.filters.simulated.SimulatedFilter
    kwds:
      wheel: filterwheel
      position: 1
  filter_561:
    driver: voxel.drivers.filters.simulated.SimulatedFilter
    kwds:
      wheel: filterwheel
      position: 2
  x-axis:
    driver: voxel.drivers.linear_axis.simulated.SimulatedLinearAxis
    kwds:
      dimension: X
    waveform:
      task: acq_task
      pin: ao3
  y-axis:
    driver: voxel.drivers.linear_axis.simulated.SimulatedLinearAxis
    kwds:
      dimension: Y
  z-axis:
    driver: voxel.drivers.linear_axis.simulated.SimulatedLinearAxis
    kwds:
      dimension: Z
  filterwheel:
    driver: voxel.drivers.filters.simulated.SimulatedFilterWheel
    kwds:
      wheel_id: 1

io:
  imaris: &imaris
    driver: voxel.drivers.writers.imaris.ImarisWriter
    kwds:
      path: D:/voxel_test
  robocopy: &robocopy
    driver: voxel.drivers.transfers.robocopy.RobocopyFileTransfer
    kwds:
      external_path: D:/voxel_test2
      local_path: D:/voxel_test

channels:
  red:
    camera: simulated_camera_1
    lens: objective_40x
    laser: laser_561
    filter: filter_561
    writer: *imaris
    transfer: *robocopy
  green:
    camera: simulated_camera_1
    lens: objective_40x
    laser: laser_488
    filter: filter_488
    writer: *imaris
    transfer: *robocopy

settings:
  simulated_camera_1:
    exposure_time_ms: 20.0
    pixel_type: 16
    roi_height_px: 512
    roi_width_px: 512
    bit_packing_mode: msb
  channels.*.writer:
    compression: lz4shuffle
    pixel_type: uint16
  channels.*.file_transfer:
    verify_transfer: True
    max_retry: 3
    timeout_s: 60
